WorkflowBuilder(Version=2.4.0)
Bonsai.Spinnaker.SpinnakerCapture(Index=0, ColorProcessing=NoColorProcessing)
-> MemberSelector(Selector=Image)
-> Bonsai.Vision.Flip(Mode=Both)
-> Bonsai.Vision.VideoWriter => #3
  FileName="Bonsai assay rolling\raw video.avi"
  Suffix=None
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
-> Bonsai.Vision.Crop(RegionOfInterest(X=18, Y=264, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=15, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #9
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y1.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#9 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x1.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=125, Y=266, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #19
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y2.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#19 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x2.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=235, Y=266, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #29
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y3.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#29 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x3.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=345, Y=269, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #39
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y4.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#39 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x4.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=454, Y=266, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #49
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y5.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#49 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x5.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=561, Y=264, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #59
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y6.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#59 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x6.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=671, Y=266, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #69
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y7.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#69 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x7.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=780, Y=264, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #79
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y8.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#79 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x8.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=890, Y=264, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #89
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y9.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#89 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x9.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1002, Y=264, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=21, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #99
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y10.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#99 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x10.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1109, Y=264, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #109
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y11.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#109 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x11.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1240, Y=259, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #119
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y12.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#119 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x12.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1349, Y=256, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #129
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y13.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#129 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x13.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1459, Y=256, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #139
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y14.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#139 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x14.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1566, Y=259, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #149
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y15.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#149 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x15.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1678, Y=259, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #159
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y16.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#159 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x16.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1787, Y=259, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #169
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y17.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#169 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x17.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1893, Y=259, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #179
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y18.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#179 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x18.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=0, Y=127, Width=2440, Height=1837))
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=2005, Y=254, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #190
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y19.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#190 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x19.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=2115, Y=259, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #200
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y20.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#200 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x20.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=2223, Y=261, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #210
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y21.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#210 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x21.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=2334, Y=254, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #220
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y22.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#220 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x22.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=18, Y=1176, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #230
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y23.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#230 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x23.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=129, Y=1181, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #240
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y24.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#240 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x24.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=237, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #250
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y25.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#250 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x25.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=346, Y=1176, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #260
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y26.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#260 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x26.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=455, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=21, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #270
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y27.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#270 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x27.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=564, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #280
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y28.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#280 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x28.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=673, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #290
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y29.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#290 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x29.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=783, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #300
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y30.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#300 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x30.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=892, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=15, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #310
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y31.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#310 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x31.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1005, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=15, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #320
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y32.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#320 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x32.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1112, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=15, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #330
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y33.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#330 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x33.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1240, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=15, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #340
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y34.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#340 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x34.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1347, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=15, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #350
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y35.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#350 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x35.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1458, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=15, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #360
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y36.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#360 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x36.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1568, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=15, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #370
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y37.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#370 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x37.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1676, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=15, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #380
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y38.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#380 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x38.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1787, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=15, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #390
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y39.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#390 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x39.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1895, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=15, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #400
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y40.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#400 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x40.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=2006, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=15, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #410
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y41.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#410 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x41.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=2117, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=15, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #420
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y42.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#420 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x42.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=2229, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=15, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #430
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y43.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#430 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x43.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=2335, Y=1179, Width=88, Height=650))
-> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0, ThresholdValue=15, ThresholdType=Binary, SubtractionMethod=Dark)
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis
-> Bonsai.Vision.LargestBinaryRegion
-> MemberSelector(Selector=Centroid) => #440
-> MemberSelector(Selector=Y)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\y44.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#440 -> MemberSelector(Selector=X)
-> Bonsai.IO.CsvWriter(FileName="Bonsai assay rolling\x44.csv", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#3 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=122, Width=2438, Height=1825))
